PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flanker
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Routines
  Routine trial
    TextComponent stimulus
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      text [set every repeat] = $trialStimulus
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    KeyboardComponent trial_response
      allowedKeys = 'f','j'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Instructions...

        Have fun!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_types.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('trialStimulus', 'f'), ('corrResponse', 'f')]),
      OrderedDict([('trialStimulus', 'j'), ('corrResponse', 'j')])]
    Routine trial
  LoopTerminator trials
